opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: #1 Research
author: Harry Smith - University of Bristol
description: Makes a #1 pixel art, to represent University of Bristol being the No 1 research chemistry university in the UK 
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 6}
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 4}
  Canvas: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 2}
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p1000_single_gen2: [opentrons/opentrons_96_tiprack_1000ul/1]
ingredients:
  - Font Colour Liquid: {description: The water used for the text }
  - Background Colour Liquid: {description: Background water for the pixel art}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Font Colour Liquid {volume: 10000}: A1
    Background Colour Liquid {volume: 10000}: A12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A12
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  dispense_labware: Canvas
  dispense_wells: A1, A7, A8, A12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: Canvas
  dispense_wells: D2, F2, C3-G3, D4, F4, C5-G5, D6, F6, C9, G9, B10-G10, G11
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: single
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A12
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  dispense_labware: Canvas
  dispense_wells: A2-C2, E2, G2, H2, A3, B3, H3, A4-C4, E4, G4, H4, A5, B5, H5, A6-C6, E6, G6, H6, A9, B9, D9-F9, H9, A10, H10, A11-F11, H11
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons OT-2 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 300, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A12, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 75, labwareId: Canvas, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 75, labwareId: Canvas, wellName: A7, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 75, labwareId: Canvas, wellName: A8, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 75, labwareId: Canvas, wellName: A12, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 94}
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