opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: Heater Shaker Test
author: Harry Smith - University of Bristol
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
moduleLocationUpdate:
  heaterShakerModuleV1: {location: 7}
labwareLocationUpdate:
  Opentrons 96 PCR Heater-Shaker Adapter: {loadName: opentrons_96_pcr_adapter, namespace: opentrons, version: 1, location: heaterShakerModuleV1}
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 10}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: Opentrons 96 PCR Heater-Shaker Adapter}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p1000_single_gen2: [opentrons/opentrons_96_tiprack_1000ul/1]
ingredients:
  - Water
ingredLocations:
  NEST 96 Well Plate 100 µL PCR Full Skirt:
    Water {volume: 75}: B2-F2, G3, G4, B5-F5, B7-G7, D8, E8, F9, G10, C9, B10
savedStepForms:
- stepType: heaterShaker
  stepName: heater-shaker
  moduleId: heaterShakerModuleV1
  setHeaterShakerTemperature: false
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  targetSpeed: 1000
  setShake: true
  latchOpen: false
  heaterShakerSetTimer: true
  heaterShakerTimerMinutes: 3
  heaterShakerTimerSeconds: 0
labwareDefinitions:
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commands:
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- heaterShaker/closeLabwareLatch: {moduleId: heaterShakerModuleV1}
- heaterShaker/deactivateHeater: {moduleId: heaterShakerModuleV1}
- heaterShaker/setAndWaitForShakeSpeed: {moduleId: heaterShakerModuleV1, rpm: 1000}
- waitForDuration: {seconds: 180}
- heaterShaker/deactivateShaker: {moduleId: heaterShakerModuleV1}
- heaterShaker/deactivateHeater: {moduleId: heaterShakerModuleV1}
