opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: Robin Pixel Art
author: Harry Smith - University of Bristol
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p1000_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 4}
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 2}
pipetteTiprackAssignments:
  p1000_single_gen2: [opentrons/opentrons_96_tiprack_1000ul/1]
ingredients:
  - Background Colour Liquid: {description: Water that will be used to form the background of the pixel art}
  - Robin Red Colour: {description: Water used for the red of a robin}
  - Robin Brown Colour: {description: Brown Colour of the robin}
  - Robin Black Colour: {description: Black colour for robin}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Background Colour Liquid {volume: 10000}: A1
    Robin Red Colour {volume: 10000}: A2
    Robin Brown Colour {volume: 10000}: A3
    Robin Black Colour {volume: 10000}: A4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: D3, B4-E4, C5-E5, C6-E6, D7, E7
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A3
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A4-A6, B6, A7-C7, B8-D8, C9-F9, E10-G10, F11, G11
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: single
  changeTip: always
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: E3, F4, G4, F5, F6, G6, F7, E8-G8
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A4
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: H4, B5, G5, G7, H8
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 975, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: D3, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: B4, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: C4, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: D4, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
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