opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: Smiley Face
author: Harry Smith - University of Bristol
description: Demo that prints a smiley face 
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 300 µL: {loadName: opentrons_96_tiprack_300ul, namespace: opentrons, version: 1, location: 7}
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 11}
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 10}
  NEST 96 Well Plate 100 µL PCR Full Skirt: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 2}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p1000_single_gen2: [opentrons/opentrons_96_tiprack_1000ul/1]
ingredients:
  - Background colour water: {description: Water that will be used to form the background of the pixel art.}
  - Smile Water Colour: {description: The colour water for the smile portion of the pixel art.}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Background colour water {volume: 15000}: A1
    Smile Water Colour {volume: 10000}: A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A2
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: F4, C5, G5-G7, C8, G8, F9
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A4-E4, G4, H4, A5, B5, D5-F5, H5, A6-F6, H6, A7-F7, H7, A8, B8, D8-F8, H8, A9-E9, G9, H9
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  tipRack: opentrons/opentrons_96_tiprack_300ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: NEST 96 Well Plate 100 µL PCR Full Skirt
  dispense_wells: A1-A3, A10-A12
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 600, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: F4, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: C5, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: G5, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: NEST 96 Well Plate 100 µL PCR Full Skirt, wellName: G6, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
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