opentrons/protocol-designer 8.1.3
schemaVersion: 8
protocolName: U.K. Ref #1
author: Harry Smith - University of Bristol
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 1, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipetteLocationUpdate:
  p300_multi_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labwareLocationUpdate:
  Opentrons OT-2 96 Tip Rack 1000 µL: {loadName: opentrons_96_tiprack_1000ul, namespace: opentrons, version: 1, location: 4}
  UK: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 1}
  REF: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 2}
  #1: {loadName: nest_96_wellplate_100ul_pcr_full_skirt, namespace: opentrons, version: 2, location: 3}
  NEST 12 Well Reservoir 15 mL: {loadName: nest_12_reservoir_15ml, namespace: opentrons, version: 1, location: 5}
pipetteTiprackAssignments:
  p300_multi_gen2: [opentrons/opentrons_96_tiprack_300ul/1]
  p1000_single_gen2: [opentrons/opentrons_96_tiprack_1000ul/1]
ingredients:
  - Writing Liquid: {description: Black Liquid}
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Writing Liquid {volume: 10000}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: UK
  dispense_wells: B2-F2, G3, G4, B5-F5, B7-G7, D8, E8, C9, F9, B10, G10
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: REF
  dispense_wells: B1-G1, B2, D2, B3, D3, C4, E4-G4, B6-G6, B7, E7, G7, B8, E8, G8, B10-G10, B11, E11, B12, E12
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  tipRack: opentrons/opentrons_96_tiprack_1000ul/1
  volume: 75
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  dispense_labware: #1
  dispense_wells: C2, F2, B3-G3, C4, F4, B5-G5, C6, F6, C8, G8, B9, G9, B10-G10, G11
  dropTip_location: trashBin
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons OT-2 96 Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 975, labwareId: NEST 12 Well Reservoir 15 mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: UK, wellName: B2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: UK, wellName: C2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: UK, wellName: D2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
- dispense: {pipetteId: p1000_single_gen2, volume: 75, labwareId: UK, wellName: E2, wellLocation: {origin: bottom, offset: {z: 1, x: 0, y: 0}}, flowRate: 274.7}
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